PsychoPy2experiment version="2024.1.4"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'lang001', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3840, 1600]
  expName = language_cz_foreign_recognition_followup
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    SoundComponent sound_stimulus
      sound [set every repeat] = $stimulus
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine introduction
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    TextComponent text_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vasim ukolem bude posoudit, jak moc je ukazka typickym prikladem standardniho ceskeho nareci (napr. Prazskeho) a jak moc nestandardniho (napr. Ostravskeho).

        Za chvili vam prehrajeme ukazky obou nareci, abyste meli lepsi predstavu.

        Pro pokracovani stistknete mezernik.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_introduction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Za chvili se spusti nahravka
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    TextComponent text_trialN
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $f'Nahravka {trials.thisN + 1} z 48'
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  Routine thank_you
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Dekujeme za vas cas
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  Routine testsettings
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'settings/' + str(expInfo['participant']) + '.xlsx'
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  Routine example
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    TextComponent text_example_introdution
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $f'V nasledujici ukazce uslysite priklad {stimulus_type} nareci'
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    SoundComponent sound_example
      durationEstim = 4
      sound [set every repeat] = $stimulus_example
      startVal [time (s)] = 2
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  Routine example_continue
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    KeyboardComponent key_example_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Prosim stisknete mezernik pro pokracovani
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  Routine trial_czech_choice
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    SliderComponent slider_certaity
      forceEndRoutine = True
      granularity = 0
      labels = "Standardni", "", "Neco mezi", "", "NEstandardni"
      letterHeight = 0.04
      pos = (0, -0.25)
      size = (1, 0.15)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (-2, -1, 0, 1, 2)
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    TextComponent text_certainty
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0
      text = Jak byste ohodnotili prehranou nahravku?
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Flow
  Routine introduction
  Routine trial_czech_choice
  LoopInitiator example_loop loopType="TrialHandler"
    conditionsFile = settings/followup_examples.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'example_trial': 1, 'stimulus_example': 'stimuli/recording1.wav', 'stimulus_type': 'standardniho'},
      {'example_trial': 2, 'stimulus_example': 'stimuli/recording2.wav', 'stimulus_type': 'Nestandardniho'},
      {'example_trial': 3, 'stimulus_example': 'stimuli/recording1.wav', 'stimulus_type': 'standardniho'},
      {'example_trial': 4, 'stimulus_example': 'stimuli/recording2.wav', 'stimulus_type': 'Nestandardniho'}]
    Routine example
    Routine example_continue
  LoopTerminator example_loop
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = settings/lang_comparison.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial': 1, 'stimulus': 'stimuli/recording1.wav'},
      {'trial': 2, 'stimulus': 'stimuli/recording2.wav'},
      {'trial': 3, 'stimulus': 'stimuli/recording1.wav'},
      {'trial': 4, 'stimulus': 'stimuli/recording2.wav'},
      {'trial': 5, 'stimulus': 'stimuli/recording1.wav'},
      {'trial': 6, 'stimulus': 'stimuli/recording2.wav'}]
    Routine trial_introduction
    Routine trial
    Routine trial_czech_choice
  LoopTerminator trials
  Routine thank_you
